CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:22
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^iPSC-WiCell-CellPainting_(?P<PositionX>[A-G]{1})(?P<PositionY>[0-11]{2})_s(?P<Site>[0-16]{1,2})_w(?P<Wavelength>[0-9]{1,2}).TIFF
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['DNA: DNA stained with DAPI', 'PH3: An antibody for phosphorylated histone H3 correlated with mitosis', 'cellbody: ']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:5
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "w5")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "w4")
    Name to assign these images:ER
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "w3")
    Name to assign these images:Nucleoli
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "w2")
    Name to assign these images:Actin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "w1")
    Name to assign these images:mito
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Crop:[module_num:5|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
    Select the input image:Actin
    Name the output image:ActinCropped
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:First
    Left and right rectangle positions:800,-800
    Top and bottom rectangle positions:800,-800
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    Remove empty rows and columns?:All
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
Crop:[module_num:6|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
    Select the input image:DNA
    Name the output image:DNAcropped
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:First
    Left and right rectangle positions:800,-800
    Top and bottom rectangle positions:800,-800
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    Remove empty rows and columns?:All
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
Crop:[module_num:7|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
    Select the input image:ER
    Name the output image:ERcropped
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:First
    Left and right rectangle positions:800,-end
    Top and bottom rectangle positions:800,-end
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    Remove empty rows and columns?:All
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
Crop:[module_num:8|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
    Select the input image:Nucleoli
    Name the output image:NucleoliCropped
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:First
    Left and right rectangle positions:800,-800
    Top and bottom rectangle positions:800,-800
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    Remove empty rows and columns?:All
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
Crop:[module_num:9|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
    Select the input image:mito
    Name the output image:mitoCropped
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:First
    Left and right rectangle positions:800,-800
    Top and bottom rectangle positions:800,-800
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    Remove empty rows and columns?:All
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
IdentifyPrimaryObjects:[module_num:10|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
    Select the input image:DNAcropped
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):8,80
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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
IdentifySecondaryObjects:[module_num:11|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:NucleoliCropped
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
IdentifyTertiaryObjects:[module_num:12|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

MeasureObjectSizeShape:[module_num:13|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
    Select objects to measure:Nuclei
    Select objects to measure:Cells
    Select objects to measure:Cytoplasm
    Calculate the Zernike features?:Yes

MeasureTexture:[module_num:14|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
    Hidden:5
    Hidden:3
    Hidden:3
    Select an image to measure:ActinCropped
    Select an image to measure:DNAcropped
    Select an image to measure:ERcropped
    Select an image to measure:NucleoliCropped
    Select an image to measure:mitoCropped
    Select objects to measure:Cells
    Select objects to measure:Cytoplasm
    Select objects to measure:Nuclei
    Texture scale to measure:3
    Texture scale to measure:5
    Texture scale to measure:10
    Measure images or objects?:Objects

MeasureGranularity:[module_num:15|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
    Image count:4
    Object count:2
    Select an image to measure:ActinCropped
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16
    Select objects to measure:Cells
    Select objects to measure:Nuclei
    Object count:3
    Select an image to measure:ERcropped
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16
    Select objects to measure:Cells
    Select objects to measure:Nuclei
    Select objects to measure:Cytoplasm
    Object count:3
    Select an image to measure:mitoCropped
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16
    Select objects to measure:Cells
    Select objects to measure:Cytoplasm
    Select objects to measure:Nuclei
    Object count:2
    Select an image to measure:NucleoliCropped
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16
    Select objects to measure:Cells
    Select objects to measure:Nuclei

MeasureObjectNeighbors:[module_num:16|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Expand until adjacent
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    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:17|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Within a specified distance
    Neighbor distance:5
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:18|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
    Select objects to measure:Nuclei
    Select neighboring objects to measure:Nuclei
    Method to determine neighbors:Within a specified distance
    Neighbor distance:5
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureColocalization:[module_num:19|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
    Hidden:5
    Hidden:1
    Select an image to measure:Actin
    Select an image to measure:DNA
    Select an image to measure:ERcropped
    Select an image to measure:NucleoliCropped
    Select an image to measure:mitoCropped
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Within objects
    Select an object to measure:Nuclei
    Run all metrics?:Yes
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
MeasureObjectIntensity:[module_num:20|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
    Hidden:5
    Select an image to measure:Actin
    Select an image to measure:DNA
    Select an image to measure:ER
    Select an image to measure:Nucleoli
    Select an image to measure:mito
    Select objects to measure:Cells
    Select objects to measure:Cytoplasm
    Select objects to measure:Nuclei

MeasureObjectIntensityDistribution:[module_num:21|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
    Hidden:5
    Hidden:3
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:Magnitudes and phase
    Maximum zernike moment:9
    Select an image to measure:Actin
    Select an image to measure:DNA
    Select an image to measure:ERcropped
    Select an image to measure:NucleoliCropped
    Select an image to measure:mitoCropped
    Select objects to measure:Cells
    Object to use as center?:These objects
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    Select objects to measure:Cytoplasm
    Object to use as center?:These objects
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    Select objects to measure:Nuclei
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
ExportToSpreadsheet:[module_num:22|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:Null
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
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